# Generated by Configurator on Fri Jun 12 13:25:50 CEST 2009

# Reset
Property,Core,Initialize,0

# Devices
Device,/dev/tty.USA49Wb1P1.1,SerialManager,/dev/tty.USA49Wb1P1.1
Device,/dev/tty.USA49Wb1P2.2,SerialManager,/dev/tty.USA49Wb1P2.2
Device,CAM,Hamamatsu,Hamamatsu_DCAM
Device,ZeissScope,ZeissCAN,ZeissScope
Device,ZeissObjectives,ZeissCAN,ZeissObjectives
Device,ZeissOptovar,ZeissCAN,ZeissOptovar
Device,Focus,ZeissCAN,Focus
Device,ZeissShutter,ZeissCAN,ZeissShutter
Device,ZeissHalogenLamp,ZeissCAN,ZeissHalogenLamp
Device,ZeissFilterWheel2,ZeissCAN,ZeissFilterWheel2
Device,ZeissFilterWheel1,ZeissCAN,ZeissFilterWheel1
Device,ZeissReflectorTurret,ZeissCAN,ZeissReflectorTurret

# Pre-init settings for devices
Property,/dev/tty.USA49Wb1P1.1,AnswerTimeout,500.0000
Property,/dev/tty.USA49Wb1P1.1,BaudRate,9600
Property,/dev/tty.USA49Wb1P1.1,DataBits,8
Property,/dev/tty.USA49Wb1P1.1,DelayBetweenCharsMs,0.0000
Property,/dev/tty.USA49Wb1P1.1,Handshaking,Off
Property,/dev/tty.USA49Wb1P1.1,StopBits,1

Property,/dev/tty.USA49Wb1P2.2,AnswerTimeout,500.0000
Property,/dev/tty.USA49Wb1P2.2,BaudRate,9600
Property,/dev/tty.USA49Wb1P2.2,DataBits,8
Property,/dev/tty.USA49Wb1P2.2,DelayBetweenCharsMs,0.0000
Property,/dev/tty.USA49Wb1P2.2,Handshaking,Off
Property,/dev/tty.USA49Wb1P2.2,StopBits,1
Property,CAM,Slot,0
Property,ZeissScope,Port,/dev/tty.USA49Wb1P2.2
Property,ZeissShutter,External-Internal Shutter,Internal
Property,ZeissShutter,ZeissShutterNr,1

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,CAM
Property,Core,Shutter,ZeissShutter
Property,Core,Focus,Focus
Property,Core,AutoShutter,0

# Camera-synchronized devices
ImageSynchro,ZeissObjectives
ImageSynchro,ZeissShutter
ImageSynchro,ZeissHalogenLamp
ImageSynchro,ZeissReflectorTurret
ImageSynchro,ZeissFilterWheel2
ImageSynchro,ZeissFilterWheel1

# Labels
# ZeissObjectives
Label,ZeissObjectives,5,blankx
Label,ZeissObjectives,4,100x
Label,ZeissObjectives,3,63x
Label,ZeissObjectives,2,40x
Label,ZeissObjectives,1,20x
Label,ZeissObjectives,0,10x
# ZeissOptovar
Label,ZeissOptovar,4,Position-5
Label,ZeissOptovar,3,Position-4
Label,ZeissOptovar,2,Position-3
Label,ZeissOptovar,1,Position-2
Label,ZeissOptovar,0,Position-1
# ZeissFilterWheel2
Label,ZeissFilterWheel2,3,-
Label,ZeissFilterWheel2,2,0.4
Label,ZeissFilterWheel2,1,6
Label,ZeissFilterWheel2,0,100
# ZeissFilterWheel1
Label,ZeissFilterWheel1,3,100
Label,ZeissFilterWheel1,2,50
Label,ZeissFilterWheel1,1,25
Label,ZeissFilterWheel1,0,12
# ZeissReflectorTurret
Label,ZeissReflectorTurret,7,DIC
Label,ZeissReflectorTurret,6,YFP
Label,ZeissReflectorTurret,5,CFP
Label,ZeissReflectorTurret,4,blank
Label,ZeissReflectorTurret,3,GFP
Label,ZeissReflectorTurret,2,DAPI
Label,ZeissReflectorTurret,1,TR
Label,ZeissReflectorTurret,0,FITC

# Configuration presets
# Group: Camera
# Preset: 8bitBin4
ConfigGroup,Camera,8bitBin4,CAM,Binning,4
ConfigGroup,Camera,8bitBin4,CAM,PixelType,8bit

# Preset: 8bitBin2
ConfigGroup,Camera,8bitBin2,CAM,Binning,2
ConfigGroup,Camera,8bitBin2,CAM,PixelType,8bit

# Preset: 8bitBin1
ConfigGroup,Camera,8bitBin1,CAM,Binning,1
ConfigGroup,Camera,8bitBin1,CAM,PixelType,8bit

# Preset: 16bitBin1
ConfigGroup,Camera,16bitBin1,CAM,Binning,1
ConfigGroup,Camera,16bitBin1,CAM,PixelType,16bit


# Group: Filter2
# Preset: 6
ConfigGroup,Filter2,6,ZeissFilterWheel2,Label,6

# Preset: 0.4
ConfigGroup,Filter2,0.4,ZeissFilterWheel2,Label,0.4

# Preset: 100
ConfigGroup,Filter2,100,ZeissFilterWheel2,Label,100

# Preset: -
ConfigGroup,Filter2,-,ZeissFilterWheel2,Label,-


# Group: Objective
# Preset: blankx
ConfigGroup,Objective,blankx,ZeissObjectives,Label,blankx

# Preset: 20x
ConfigGroup,Objective,20x,ZeissObjectives,Label,20x

# Preset: 63x
ConfigGroup,Objective,63x,ZeissObjectives,Label,63x

# Preset: 40x
ConfigGroup,Objective,40x,ZeissObjectives,Label,40x

# Preset: 10x
ConfigGroup,Objective,10x,ZeissObjectives,Label,10x

# Preset: 100x
ConfigGroup,Objective,100x,ZeissObjectives,Label,100x


# Group: Filter1
# Preset: 50
ConfigGroup,Filter1,50,ZeissFilterWheel1,Label,50

# Preset: 25
ConfigGroup,Filter1,25,ZeissFilterWheel1,Label,25

# Preset: 12
ConfigGroup,Filter1,12,ZeissFilterWheel1,Label,12

# Preset: 100
ConfigGroup,Filter1,100,ZeissFilterWheel1,Label,100


# Group: Channel
# Preset: ChannelDIC
ConfigGroup,Channel,ChannelDIC,ZeissShutter,State,1
ConfigGroup,Channel,ChannelDIC,ZeissHalogenLamp,State,1
ConfigGroup,Channel,ChannelDIC,ZeissReflectorTurret,Label,DIC

# Preset: ChannelRFP
ConfigGroup,Channel,ChannelRFP,ZeissShutter,State,1
ConfigGroup,Channel,ChannelRFP,ZeissHalogenLamp,State,0
ConfigGroup,Channel,ChannelRFP,ZeissReflectorTurret,Label,TR

# Preset: ChannelGFP
ConfigGroup,Channel,ChannelGFP,ZeissShutter,State,1
ConfigGroup,Channel,ChannelGFP,ZeissHalogenLamp,State,0
ConfigGroup,Channel,ChannelGFP,ZeissReflectorTurret,Label,GFP



# PixelSize settings

